PsychoPy2experiment version="2024.2.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': '', 'computer_n': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = comp
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine choice_trial
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    PolygonComponent r_1
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = (r_1_x, r_1_y)
      shape = rectangle
      size [set every repeat] = w_1_tmp, h_1_tmp
      startVal [time (s)] = 0.0
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    PolygonComponent r_2
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = (0, 0)
      shape = rectangle
      size [set every repeat] = w_2_tmp, h_2_tmp
      startVal [time (s)] = 0.0
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    PolygonComponent r_3
      fillColor = 0.0039, 0.0039, 0.0039
      lineColor = -1.0000, -1.0000, -1.0000
      pos [set every repeat] = (0, 0)
      shape = rectangle
      size [set every repeat] = (w_3_tmp, h_3_tmp)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_choice
      clickable = r1, r2, r3
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      saveParamsClickable = choice,
      startVal [time (s)] = 0.0
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    TextComponent r_1_label
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 5
      pos [set every repeat] = (r_1_txt_x, r_1_txt_y)
      startVal [time (s)] = 0.0
      text = 1
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    TextComponent r_2_label
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 5
      pos [set every repeat] = (r_2_txt_x, r_2_txt_y)
      startVal [time (s)] = 0.0
      text = 2
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    TextComponent r_3_label
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 5
      pos [set every repeat] = (r_3_txt_x, r_3_txt_y)
      startVal [time (s)] = 0.0
      text = 3
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    TextComponent prompt
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 10
      pos = (prompt_x_loc, prompt_y_loc)
      startVal [time (s)] = 0.0
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      text:
        Click on the rectangle with the largest area.
  Routine pre_trial
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    CodeComponent rect_dims
      Code Type = Auto->JS
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      Begin Routine:
        if effect=="critical":
            h_1_tmp=h_1
            w_1_tmp=w_2
            h_2_tmp=h_2
            w_2_tmp=w_2
            h_3_tmp=h_3
            w_3_tmp=w_3
        elif effect=="filler":
            h_1_tmp=np.random.uniform(dim_min,dim_max,1)
            w_1_tmp=np.random.uniform(dim_min,dim_max,1)
            h_2_tmp=np.random.uniform(dim_min,dim_max,1)
            w_2_tmp=np.random.uniform(dim_min,dim_max,1)
            h_3_tmp=np.random.uniform(dim_min,dim_max,1)
            w_3_tmp=np.random.uniform(dim_min,dim_max,1)
        elif effect=="catch":
            u_1=sample_diag(d3_r, d3_int)
            l_1=sample_diag(d1_r, d1_int)
            l_2=sample_diag(d1_r, d1_int)
            which_upper=np.random.choice(np.arange(3))
            if which_upper==0:
                w_1_tmp=u_1[0]
                h_1_tmp=u_1[1]
                w_2_tmp=l_1[0]
                h_2_tmp=l_1[1]
                w_3_tmp=l_2[0]
                h_3_tmp=l_2[1]
            elif which_upper==1:
                w_1_tmp=l_1[0]
                h_1_tmp=l_1[1]
                w_2_tmp=u_1[0]
                h_2_tmp=u_1[1]
                w_3_tmp=l_2[0]
                h_3_tmp=l_2[1]
            else:
                w_1_tmp=l_1[0]
                h_1_tmp=l_1[1]
                w_2_tmp=l_2[0]
                h_2_tmp=l_2[1]
                w_3_tmp=u_2[0]
                h_3_tmp=u_2[1]
    CodeComponent rect_locs
      Code Type = Auto->JS
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      Begin Routine:
        if effect == "critical":
            config_tmp = config
        else:
            config_tmp = np.random.choice([1, 2.1, 2.2, 3])

        if config_tmp == 1:
            r_1_y = round(0 + np.random.uniform(-y_jitter, y_jitter, 1))
            r_2_y = round(0 + np.random.uniform(-y_jitter, y_jitter, 1))
            r_3_y = round(0 + np.random.uniform(-y_jitter, y_jitter, 1))
        elif config_tmp == 2.1:
            r_1_y = -round(screen_height * .33 + np.random.uniform(-y_jitter, y_jitter, 1))
            r_2_y = -round(screen_height * .33 + np.random.uniform(-y_jitter, y_jitter, 1))
            r_3_y = round(screen_height * .33 + np.random.uniform(-y_jitter, y_jitter, 1))
        elif config_tmp == 2.2:
            r_1_y = -round(screen_height * .33 + np.random.uniform(-y_jitter, y_jitter, 1))
            r_2_y = round(screen_height * .33 + np.random.uniform(-y_jitter, y_jitter, 1))
            r_3_y = round(screen_height * .33 + np.random.uniform(-y_jitter, y_jitter, 1))
        elif config_tmp == 3:
            r_1_y = -round(screen_height * .33 + np.random.uniform(-y_jitter, y_jitter, 1))
            r_2_y = round(0 + np.random.uniform(-y_jitter, y_jitter, 1))
            r_3_y = round(screen_height * .33 + np.random.uniform(-y_jitter, y_jitter, 1))
        else:
            raise ValueError(f"Unexpected config_tmp value: {config_tmp}")
        r_1_txt_x=r_1_x
        r_1_txt_y=r_1_y+50
        r_2_txt_x=r_2_x
        r_2_txt_y=r_2_y+50
        r_3_txt_x=r_3_x
        r_3_txt_y=r_3_y+50
  Routine exp_params
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    CodeComponent params
      Code Type = Auto->JS
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      Begin Experiment:
        import psychopy
        import numpy as np
        d1_r=np.arange(57,133)
        d2_r=np.arange(125,200)
        dim_min = 57
        dim_max = 200
        screen_width=win.size[0]
        screen_height=win.size[1]
        screen_center_x=0
        screen_center_y=0
        r_1_x=-round(screen_width*.33)
        r_2_x=0
        r_3_x=round(screen_width*.33)
        y_jitter=30
        prompt_x_loc=0
        prompt_y_loc=round(-(screen_height/2)*.75)
    CodeComponent fncs_
      Code Type = Auto->JS
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      Begin Experiment:
        def sample_diag (d, intcpt):
            w=np.random.choice(d)
            h=intcpt-w
            stim=np.array([w,h])
            return stim
Flow
  Routine exp_params
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = trials.csv
    loopType = random
    nReps = 3
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    conditions:
      [OrderedDict([('effect', 'critical'), ('order', 'dhw'), ('distance', 2.0), ('config', 3.0), ('diag', 'lower'), ('h_1', 86.0), ('w_1', 86.0), ('h_2', 133.0), ('w_2', 57.0), ('h_3', 57.0), ('w_3', 133.0)]),
      OrderedDict([('effect', 'critical'), ('order', 'dhw'), ('distance', 2.0), ('config', 3.0), ('diag', 'upper'), ('h_1', 157.0), ('w_1', 157.0), ('h_2', 200.0), ('w_2', 125.0), ('h_3', 125.0), ('w_3', 200.0)]),
      OrderedDict([('effect', 'critical'), ('order', 'dhw'), ('distance', 5.0), ('config', 3.0), ('diag', 'lower'), ('h_1', 85.0), ('w_1', 85.0), ('h_2', 133.0), ('w_2', 57.0), ('h_3', 57.0), ('w_3', 133.0)]),
      OrderedDict([('effect', 'critical'), ('order', 'dhw'), ('distance', 5.0), ('config', 3.0), ('diag', 'upper'), ('h_1', 154.0), ('w_1', 154.0), ('h_2', 200.0), ('w_2', 125.0), ('h_3', 125.0), ('w_3', 200.0)]),
      OrderedDict([('effect', 'critical'), ('order', 'dhw'), ('distance', 14.0), ('config', 3.0), ('diag', 'lower'), ('h_1', 81.0), ('w_1', 81.0), ('h_2', 133.0), ('w_2', 57.0), ('h_3', 57.0), ('w_3', 133.0)]),
      OrderedDict([('effect', 'critical'), ('order', 'dhw'), ('distance', 14.0), ('config', 3.0), ('diag', 'upper'), ('h_1', 147.0), ('w_1', 147.0), ('h_2', 200.0), ('w_2', 125.0), ('h_3', 125.0), ('w_3', 200.0)]),
      OrderedDict([('effect', 'critical'), ('order', 'dwh'), ('distance', 2.0), ('config', 3.0), ('diag', 'lower'), ('h_1', 86.0), ('w_1', 86.0), ('h_2', 57.0), ('w_2', 133.0), ('h_3', 133.0), ('w_3', 57.0)])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
    Routine pre_trial
    Routine choice_trial
  LoopTerminator trials
